<CompuCell3D version="3.6.2">
   
   <Potts>
     <!-- Basic properties of CPM (GGH) algorithm -->
     <Dimensions x="100" y="100" z="1"/>
     <Steps>10000</Steps>
     <Temperature>1.0</Temperature>
     <NeighborOrder>2</NeighborOrder>
     <Boundary_x>Periodic</Boundary_x>
     <Boundary_y>Periodic</Boundary_y>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="Coop"/>
      <CellType TypeId="2" TypeName="Def"/>
   </Plugin>
   
   <Plugin Name="Volume"/>
   
   <Plugin Name="NeighborTracker">
      
      <!-- Module tracking neighboring cells of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">0.0</Energy>
      <Energy Type1="Medium" Type2="Coop">1.0</Energy>
      <Energy Type1="Medium" Type2="Def">1.0</Energy>
      <Energy Type1="Coop" Type2="Coop">1.0</Energy>
      <Energy Type1="Coop" Type2="Def">1.0</Energy>
      <Energy Type1="Def" Type2="Def">1.0</Energy>
      <NeighborOrder>2</NeighborOrder>
   </Plugin>
   
   <Steppable Type="UniformInitializer">
      
      <!-- Initial layout of cells in the form of rectangular slab -->
      <Region>
         <BoxMin x="20" y="20" z="0"/>
         <BoxMax x="80" y="80" z="1"/>
         <Gap>0</Gap>
         <Width>5</Width>
         <Types>Coop,Def</Types>
      </Region>
   </Steppable>
</CompuCell3D>
